# Generated by OpenSesame 0.27.4 (Frisky Freud)
# Thu Feb  6 21:54:38 2014 (posix)
# <http://www.cogsci.nl/opensesame>

set mouse_backend "psycho"
set subject_parity "even"
set transparent_variables "no"
set height "768"
set font_italic "no"
set synth_backend "legacy"
set title "New experiment"
set coordinates "relative"
set start "experiment"
set sampler_backend "legacy"
set font_family "mono"
set foreground "white"
set font_bold "no"
set description "Default description"
set background "black"
set font_size "18"
set keyboard_backend "psycho"
set canvas_backend "psycho"
set compensation "0"
set bidi "no"
set subject_nr "0"
set width "1024"

define sketchpad show_blank
	set duration "0"
	set description "Displays stimuli"

define feedback feedback
	set duration "800"
	set reset_variables "yes"
	set description "Provides feedback to the participant"
	draw textline 0 0 "[feedback_message]" center=1 color=[feedback_colour] font_family="mono" font_size=25 font_italic=no font_bold=no show_if="always" html="yes"

define loop training_loop
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set item "training_sequence"
	set column_order "bogus"
	set cycles "15"
	set order "sequential"
	setcycle 0 bogus ""
	run training_sequence

define sequence sequence
	run set_trial_variables "always"
	run show_shape "always"
	run show_shape "always"
	run keyboard_response "always"
	run logger "always"

define text_display thank_you
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[thank_you_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define sketchpad blank
	set duration "600"
	set description "Displays stimuli"

define text_display intro_1
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	__content__
	[intro_1_msg]
	__end__
	set background "black"
	set duration "keypress"
	set font_family "mono"

define text_display intro_2
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[intro_2_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define text_display intro_3
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[intro_3_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define sketchpad intro_4
	set duration "keypress"
	set description "Displays stimuli"
	draw image 0 0 "stimuli/red_square.png" scale=1 center=1 show_if="always"

define inline_script set_up_variables
	set _run ""
	___prepare__
	language = "de"
	
	if language == "de":
		self.experiment.set("intro_1_msg", """Im folgenden Experiment werden wir Ihnen eine Reihe von Figuren in verschiedenen Farben prU+00E4sentieren. (Weiter mit beliebigem Tastendruck)""")
		self.experiment.set("intro_2_msg","""Wenn Sie ein rotes Quadrat sehen, drU+00FCcken Sie bitte die Leertaste so schnell wie mU+00F6glich.""")
		self.experiment.set("intro_3_msg","""So sieht das rote Quadrat aus.""") 
		self.experiment.set("intro_5_msg","""Wir beginnen mit einem U+00DCbungsdurchgang. DrU+00FCcken Sie eine beliebige Taste, wenn Sie bereit sind. Bitte denken Sie daran, die Leertaste NUR DANN zu drU+00FCcken, wenn Sie ein rotes Quadrat sehen.""")
		self.experiment.set("correct_msg","""richtig""")
		self.experiment.set("incorrect_msg","""falsch""")
		self.experiment.set("intro_6_msg","""Danke! Das ist das Ende des U+00DCbungsdurchgangs.""")
		self.experiment.set("intro_7_msg","""Wir starten jetzt mit dem eigentlichen Experiment. Es wird lU+00E4nger dauern als der U+00DCbungsdurchgang und Sie werden kein Feedback erhalten. Noch einmal, bitte denken Sie daran, die Leertaste NUR DANN zu drU+00FCcken, wenn Sie ein rotes Quadrat sehen. DrU+00FCcken Sie jetzt zum Start eine beliebige Taste.""")
		self.experiment.set("thank_you_msg","""Ende. Vielen Dank fU+00FCr die Teilnahme an unserer Studie!""")
		
	else:
		self.experiment.set("intro_1_msg", """In the following experiment we will show you a series of shapes in different colours.
	(press any key to continue)""")
		self.experiment.set("intro_2_msg","""When you will see a red square press space as quickly as possible.""")
		self.experiment.set("intro_3_msg","""This is how the red square looks like.""") 
		self.experiment.set("intro_5_msg","""We will start with a practice run. Press any key whenever you are ready. Remember to press space ONLY when you see a red square!""")
		self.experiment.set("correct_msg","""correct""")
		self.experiment.set("incorrect_msg","""incorrect""")
		self.experiment.set("intro_6_msg","""This concludes the training phase.""")
		self.experiment.set("intro_7_msg","""We will now start with the proper test. It will be longer and there will be no feedback. Remember to only press space when you see a red square.
	
	(press any key to start the test)""")
		self.experiment.set("thank_you_msg","""Thank you for participating in our study!""")
	__end__
	set description "Executes Python code"

define text_display intro_6
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[intro_6_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define text_display intro_7
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[intro_7_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define sketchpad show_shape
	set duration "100"
	set description "Displays stimuli"
	draw image 0 0 "stimuli/[trial_shape].png" scale=1 center=1 show_if="always"

define sequence experiment
	run set_up_variables "always"
	run intro_1 "always"
	run intro_2 "always"
	run intro_3 "always"
	run intro_4 "always"
	run intro_5 "always"
	run shuffle_stimuli_list "always"
	run training_loop "always"
	run intro_6 "always"
	run intro_7 "always"
	run blank "always"
	run shuffle_stimuli_list "always"
	run loop "always"
	run thank_you "always"

define inline_script set_trial_variables
	set _run ""
	___prepare__
	global shapes
	global timings
	shape = shapes.pop()
	ISI = timings.pop()
	
	self.experiment.set("trial_shape", shape)
	self.experiment.set("trial_ISI", ISI)
	self.experiment.set("trial_collection_time", ISI+100)
	__end__
	set description "Executes Python code"

define inline_script shuffle_stimuli_list
	___run__
	number_of_trials = 320
	shapes = ["red_square"]*(int(0.3*number_of_trials))
	
	for colour in ["yellow", "blue", "green"]:
	    shapes += ["%s_square"%colour]*(int((0.175/3) * number_of_trials))
	shapes += ["yellow_square", "blue_square"]
	
	    
	for shape in ["star", "circle", "triangle"]:
	    shapes += ["red_%s"%shape]*(int((0.175/3) * number_of_trials))
	shapes += ["red_star", "red_circle"]
	
	for colour in ["yellow", "blue", "green"]:
	    for shape in ["star", "circle", "triangle"]:
	        shapes += ["%s_%s"%(colour,shape)]*(int((0.35/(3*3) * number_of_trials)))
	shapes += ["green_triangle", "blue_triangle", "green_circle", "blue_star"]
	
	timings = [1000]*(len(shapes)/4) + [1500]*(len(shapes)/4) + [2000]*(len(shapes)/4) + [2500]*(len(shapes)/4)
	
	random.shuffle(shapes)
	random.shuffle(timings)
	__end__
	___prepare__
	import random
	
	global shapes
	global timings
	__end__
	set description "Executes Python code"

define logger logger
	set ignore_missing "no"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "no"
	log "response"
	log "response_time"
	log "trial_shape"
	log "trial_ISI"
	log "trial_collection_time"

define text_display intro_5
	set foreground "white"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "[intro_5_msg]"
	set background "black"
	set duration "keypress"
	set font_family "mono"

define sequence training_sequence
	run set_trial_variables "always"
	run show_shape "always"
	run show_blank "always"
	run keyboard_response "always"
	run prepare_feedback_message "always"
	run feedback "always"

define inline_script prepare_feedback_message
	___run__
	shape = self.experiment.get("trial_shape")
	response = self.experiment.get("response")
	response_time = self.experiment.get("response_time")
	print shape, response, response_time
	
	feedback_message = correct_msg
	feedback_colour = "green"
	
	if (shape != "red_square" and response == "space") or (shape == "red_square" and response != "space"):
		feedback_message = incorrect_msg
		feedback_colour = "red"
		
	self.experiment.set("feedback_message", feedback_message)
	self.experiment.set("feedback_colour", feedback_colour)
	__end__
	___prepare__
	correct_msg = self.experiment.get("correct_msg")
	incorrect_msg = self.experiment.get("incorrect_msg")
	__end__
	set description "Executes Python code"

define inline_script keyboard_response
	___run__
	from openexp.keyboard import keyboard
	# The keypress timeout
	timeout = self.experiment.get("trial_ISI")
	       
	# Create a keyboard object that doesn't block the experiment, so we can use it to poll for
	# keypresses continuously:
	my_keyboard = keyboard(exp, timeout=0)
	       
	# Loop until we timeout:
	start_time = self.time()
	key = None
	while self.time() - timeout < start_time:
		if not key:
			key, key_time = my_keyboard.get_key()
	__end__
	set _prepare ""
	set description "Executes Python code"

define loop loop
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set item "sequence"
	set column_order "bogus"
	set cycles "320"
	set order "sequential"
	setcycle 0 bogus ""
	setcycle 1 bogus ""
	setcycle 2 bogus ""
	setcycle 3 bogus ""
	setcycle 4 bogus ""
	setcycle 5 bogus ""
	setcycle 6 bogus ""
	setcycle 7 bogus ""
	setcycle 8 bogus ""
	setcycle 9 bogus ""
	setcycle 10 bogus ""
	setcycle 11 bogus ""
	setcycle 12 bogus ""
	setcycle 13 bogus ""
	setcycle 14 bogus ""
	setcycle 15 bogus ""
	setcycle 16 bogus ""
	setcycle 17 bogus ""
	setcycle 18 bogus ""
	setcycle 19 bogus ""
	setcycle 20 bogus ""
	setcycle 21 bogus ""
	setcycle 22 bogus ""
	setcycle 23 bogus ""
	setcycle 24 bogus ""
	setcycle 25 bogus ""
	setcycle 26 bogus ""
	setcycle 27 bogus ""
	setcycle 28 bogus ""
	setcycle 29 bogus ""
	setcycle 30 bogus ""
	setcycle 31 bogus ""
	setcycle 32 bogus ""
	setcycle 33 bogus ""
	setcycle 34 bogus ""
	setcycle 35 bogus ""
	setcycle 36 bogus ""
	setcycle 37 bogus ""
	setcycle 38 bogus ""
	setcycle 39 bogus ""
	setcycle 40 bogus ""
	setcycle 41 bogus ""
	setcycle 42 bogus ""
	setcycle 43 bogus ""
	setcycle 44 bogus ""
	setcycle 45 bogus ""
	setcycle 46 bogus ""
	setcycle 47 bogus ""
	setcycle 48 bogus ""
	setcycle 49 bogus ""
	setcycle 50 bogus ""
	setcycle 51 bogus ""
	setcycle 52 bogus ""
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	run sequence

